CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:17
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:raw_em
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Crop:[module_num:5|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
    Select the input image:raw_em
    Name the output image:crop
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:First
    Left and right rectangle positions:1500,2500
    Top and bottom rectangle positions:1500,2500
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    Remove empty rows and columns?:All
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
GaussianFilter:[module_num:6|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
    Select the input image:crop
    Name the output image:filter
    Sigma:1

Threshold:[module_num:7|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
    Select the input image:filter
    Name the output image:Threshold
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0
    Threshold correction factor:1.01
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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    Size of adaptive window:40
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    Thresholding method:Minimum Cross-Entropy

RemoveHoles:[module_num:8|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notes:['removes not holes but, random cell debris (since the image is in negative)']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
    Select the input image:Threshold
    Name the output image:RemoveHoles
    Size of holes to fill:10

Closing:[module_num:9|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
    Select the input image:RemoveHoles
    Name the output image:Closing
    Structuring element:disk,3

ImageMath:[module_num:10|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:inverted
    Image or measurement?:Image
    Select the first image:Closing
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
Watershed:[module_num:11|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
    Select the input image:inverted
    Name the output object:Watershed
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:4
    Downsample:1
    Separate watershed labels:No

FilterObjects:[module_num:12|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notes:['remove border components']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
    Select the objects to filter:Watershed
    Name the output objects:FilterObjects
    Select the filtering mode:Image or mask border
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    Additional object count:0
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
ErodeObjects:[module_num:13|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
    Select the input object:FilterObjects
    Name the output object:ErodeObjects
    Structuring element:Disk,1
    Prevent object removal:No
    Relabel resulting objects:Yes

MeasureObjectSizeShape:[module_num:14|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
    Select object sets to measure:ErodeObjects
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:15|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
    Select the objects to filter:ErodeObjects
    Name the output objects:filteredfibrils
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:5
    Filter using a maximum measurement value?:No
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
ConvertObjectsToImage:[module_num:16|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
    Select the input objects:filteredfibrils
    Name the output image:fibrilimage
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:17|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
    Select the type of image to save:Image
    Select the image to save:fibrilimage
    Select method for constructing file names:From image filename
    Select image name for file prefix:raw_em
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:processed
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Dropbox (The University of Manchester)/fibril-tracking/nuts-and-bolts-3view/9am-achilles-fshx-processed
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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